<CompuCell3D Revision="6" Version="4.4.1">
    <Metadata>
        <NumberOfProcessors>1</NumberOfProcessors>
        <DebugOutputFrequency>10</DebugOutputFrequency>
    </Metadata>
    <Potts>
        <Dimensions x="400" y="400" z="1"></Dimensions>
        <Steps>100000</Steps>
        <Temperature>10.0</Temperature>
        <NeighborOrder>2</NeighborOrder>
    </Potts>
    <Plugin Name="CellType">
        <CellType TypeId="0" TypeName="Medium"></CellType>
        <CellType TypeId="1" TypeName="Cell"></CellType>
        <CellType TypeName="CellA" TypeId="2"></CellType>
        <CellType TypeName="CellB" TypeId="3"></CellType>
    </Plugin>
    <Plugin Name="CenterOfMass">
   </Plugin>
    <Plugin Name="Volume">
        </Plugin>
    <Plugin Name="NeighborTracker">
   </Plugin>
    <Plugin Name="Contact">
        <Energy Type1="Medium" Type2="Medium">10.0</Energy>
        <Energy Type1="Medium" Type2="Cell">10.0</Energy>
        <Energy Type1="Cell" Type2="Cell">5.0</Energy>
        <NeighborOrder>4</NeighborOrder>
        <Energy Type1="CellA" Type2="Medium">10.0</Energy>
        <Energy Type1="Cell" Type2="CellA">10.0</Energy>
        <Energy Type1="CellA" Type2="CellA">10.0</Energy>
        <Energy Type1="CellB" Type2="Medium">10.0</Energy>
        <Energy Type1="Cell" Type2="CellB">10.0</Energy>
        <Energy Type1="CellA" Type2="CellB">10.0</Energy>
        <Energy Type1="CellB" Type2="CellB">10.0</Energy>
    </Plugin>
    <Steppable Type="UniformInitializer">
        <Region>
            <BoxMin x="77" y="138" z="0"></BoxMin>
            <BoxMax x="90" y="151" z="1"></BoxMax>
            <Gap>0</Gap>
            <Width>5</Width>
            <Types>Cell</Types>
        </Region>
        <Region>
            <BoxMin x="306" y="64" z="0"></BoxMin>
            <BoxMax x="319" y="77" z="1"></BoxMax>
            <Gap>0</Gap>
            <Width>5</Width>
            <Types>CellA</Types>
        </Region>
        <Region>
            <BoxMin x="263" y="297" z="0"></BoxMin>
            <BoxMax x="276" y="310" z="1"></BoxMax>
            <Gap>0</Gap>
            <Width>5</Width>
            <Types>CellB</Types>
        </Region>
    </Steppable>
    <Steppable Type="DiffusionSolverFE">
        <DiffusionField Name="Substrate">
            <DiffusionData>
                <FieldName>Substrate</FieldName>
                <GlobalDiffusionConstant>0.01</GlobalDiffusionConstant>
                <GlobalDecayConstant>0.0001</GlobalDecayConstant>
                <InitialConcentrationExpression>0.0</InitialConcentrationExpression>
            </DiffusionData>
            <BoundaryConditions>
                <Plane Axis="X">
                    <ConstantValue Value="0.0"></ConstantValue>
                </Plane>
                <Plane Axis="Y">
                    <ConstantValue Value="0.0"></ConstantValue>
                </Plane>
                <Plane Axis="Z">
                    <ConstantValue Value="0.0"></ConstantValue>
                </Plane>
            </BoundaryConditions>
        </DiffusionField>
        <DiffusionField Name="Oxygen">
            <DiffusionData>
                <FieldName>Oxygen</FieldName>
                <GlobalDiffusionConstant>0.9</GlobalDiffusionConstant>
                <GlobalDecayConstant>1e-05</GlobalDecayConstant>
                <InitialConcentrationExpression>x/100</InitialConcentrationExpression>
            </DiffusionData>
        </DiffusionField>
    </Steppable>
    <Plugin Name="Chemotaxis">
        <ChemicalField Name="Substrate">
            <ChemotaxisByType Type="CellA" Lambda="100.0"></ChemotaxisByType>
        </ChemicalField>
        <ChemicalField Name="Oxygen">
            <ChemotaxisByType Type="Cell" Lambda="1000.0"></ChemotaxisByType>
        </ChemicalField>
    </Plugin>
    <Plugin Name="Chemotaxis">
        <ChemicalField Name="Substrate">
            <ChemotaxisByType Type="CellA" Lambda="100.0"></ChemotaxisByType>
        </ChemicalField>
        <ChemicalField Name="Oxygen">
            <ChemotaxisByType Type="Cell" Lambda="1000.0"></ChemotaxisByType>
        </ChemicalField>
    </Plugin>
    <Plugin Name="Chemotaxis"></Plugin>
</CompuCell3D>
