<CompuCell3D Revision="6" Version="4.4.1">
    <Metadata>
        <NumberOfProcessors>1</NumberOfProcessors>
        <DebugOutputFrequency>10</DebugOutputFrequency>
    </Metadata>
    <Potts>
        <Dimensions x="400" y="400" z="1"></Dimensions>
        <Steps>100000</Steps>
        <Temperature>10.0</Temperature>
        <NeighborOrder>2</NeighborOrder>
    </Potts>
    <Plugin Name="CellType">
        <CellType TypeId="0" TypeName="Medium"></CellType>
        <CellType TypeId="1" TypeName="Cell"></CellType>
        <CellType TypeName="CellA" TypeId="2"></CellType>
        <CellType TypeName="CellB" TypeId="3"></CellType>
    </Plugin>
    <Plugin Name="CenterOfMass">
   </Plugin>
    <Plugin Name="Volume">
        </Plugin>
    <Plugin Name="NeighborTracker">
   </Plugin>
    <Plugin Name="Contact">
        <Energy Type1="Medium" Type2="Medium">10.0</Energy>
        <Energy Type1="Medium" Type2="Cell">10.0</Energy>
        <Energy Type1="Cell" Type2="Cell">5.0</Energy>
        <NeighborOrder>4</NeighborOrder>
        <Energy Type1="CellA" Type2="Medium">10.0</Energy>
        <Energy Type1="Cell" Type2="CellA">10.0</Energy>
        <Energy Type1="CellA" Type2="CellA">10.0</Energy>
        <Energy Type1="CellB" Type2="Medium">10.0</Energy>
        <Energy Type1="Cell" Type2="CellB">10.0</Energy>
        <Energy Type1="CellA" Type2="CellB">10.0</Energy>
        <Energy Type1="CellB" Type2="CellB">10.0</Energy>
    </Plugin>
    <Steppable Type="UniformInitializer">
        <Region>
            <BoxMin x="47" y="178" z="0"></BoxMin>
            <BoxMax x="60" y="191" z="1"></BoxMax>
            <Gap>0</Gap>
            <Width>5</Width>
            <Types>Cell</Types>
        </Region>
        <Region>
            <BoxMin x="288" y="146" z="0"></BoxMin>
            <BoxMax x="301" y="159" z="1"></BoxMax>
            <Gap>0</Gap>
            <Width>5</Width>
            <Types>CellA</Types>
        </Region>
        <Region>
            <BoxMin x="264" y="110" z="0"></BoxMin>
            <BoxMax x="277" y="123" z="1"></BoxMax>
            <Gap>0</Gap>
            <Width>5</Width>
            <Types>CellB</Types>
        </Region>
    </Steppable>
    <Steppable Type="DiffusionSolverFE">
        <DiffusionField Name="Substrate">
            <DiffusionData>
                <FieldName>Substrate</FieldName>
                <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
                <GlobalDecayConstant>1e-05</GlobalDecayConstant>
                <InitialConcentrationExpression>0.0</InitialConcentrationExpression>
            </DiffusionData>
            <BoundaryConditions>
                <Plane Axis="X">
                    <ConstantValue PlanePosition="Min" Value="0.0"></ConstantValue>
                    <ConstantValue PlanePosition="Max" Value="0.0"></ConstantValue>
                </Plane>
                <Plane Axis="Y">
                    <Periodic></Periodic>
                </Plane>
                <Plane Axis="Z">
                    <Periodic></Periodic>
                </Plane>
            </BoundaryConditions>
        </DiffusionField>
        <DiffusionField Name="Oxygen">
            <DiffusionData>
                <FieldName>Oxygen</FieldName>
                <GlobalDiffusionConstant>0.9</GlobalDiffusionConstant>
                <GlobalDecayConstant>1e-05</GlobalDecayConstant>
                <InitialConcentrationExpression>x/100</InitialConcentrationExpression>
            </DiffusionData>
        </DiffusionField>
    </Steppable>
    <Plugin Name="Chemotaxis">
        <ChemicalField Name="Substrate">
            <ChemotaxisByType Type="CellA" Lambda="500.0"></ChemotaxisByType>
        </ChemicalField>
        <ChemicalField Name="Oxygen">
            <ChemotaxisByType Type="Cell" Lambda="1000.0"></ChemotaxisByType>
        </ChemicalField>
    </Plugin>
    <Plugin Name="Chemotaxis">
        <ChemicalField Name="Substrate">
            <ChemotaxisByType Type="CellA" Lambda="500.0"></ChemotaxisByType>
        </ChemicalField>
        <ChemicalField Name="Oxygen">
            <ChemotaxisByType Type="Cell" Lambda="1000.0"></ChemotaxisByType>
        </ChemicalField>
    </Plugin>
</CompuCell3D>
