<CompuCell3D Revision="6" Version="4.4.1">
    <Metadata>
        <NumberOfProcessors>1</NumberOfProcessors>
        <DebugOutputFrequency>10</DebugOutputFrequency>
    </Metadata>
    <Potts>
        <Dimensions x="400" y="400" z="1"></Dimensions>
        <Steps>100000</Steps>
        <Temperature>10.0</Temperature>
        <NeighborOrder>2</NeighborOrder>
    </Potts>
    <Plugin Name="CellType">
        <CellType TypeId="0" TypeName="Medium"></CellType>
        <CellType TypeId="1" TypeName="Cell"></CellType>
        <CellType TypeName="CellA" TypeId="2"></CellType>
        <CellType TypeName="CellB" TypeId="3"></CellType>
        <CellType TypeName="CellC" TypeId="4"></CellType>
    </Plugin>
    <Plugin Name="CenterOfMass">
   </Plugin>
    <Plugin Name="Volume">
        </Plugin>
    <Plugin Name="NeighborTracker">
   </Plugin>
    <Plugin Name="Contact">
        <Energy Type1="Medium" Type2="Medium">10.0</Energy>
        <Energy Type1="Medium" Type2="Cell">10.0</Energy>
        <Energy Type1="Cell" Type2="Cell">5.0</Energy>
        <NeighborOrder>4</NeighborOrder>
        <Energy Type1="CellA" Type2="Medium">10.0</Energy>
        <Energy Type1="Cell" Type2="CellA">10.0</Energy>
        <Energy Type1="CellA" Type2="CellA">10.0</Energy>
        <Energy Type1="CellB" Type2="Medium">10.0</Energy>
        <Energy Type1="Cell" Type2="CellB">10.0</Energy>
        <Energy Type1="CellA" Type2="CellB">10.0</Energy>
        <Energy Type1="CellB" Type2="CellB">10.0</Energy>
        <Energy Type1="CellC" Type2="Medium">10.0</Energy>
        <Energy Type1="Cell" Type2="CellC">10.0</Energy>
        <Energy Type1="CellA" Type2="CellC">10.0</Energy>
        <Energy Type1="CellB" Type2="CellC">10.0</Energy>
        <Energy Type1="CellC" Type2="CellC">10.0</Energy>
    </Plugin>
    <Steppable Type="UniformInitializer">
        <Region>
            <BoxMin x="295" y="244" z="0"></BoxMin>
            <BoxMax x="308" y="257" z="1"></BoxMax>
            <Gap>0</Gap>
            <Width>5</Width>
            <Types>Cell</Types>
        </Region>
        <Region>
            <BoxMin x="17" y="306" z="0"></BoxMin>
            <BoxMax x="30" y="319" z="1"></BoxMax>
            <Gap>0</Gap>
            <Width>5</Width>
            <Types>CellA</Types>
        </Region>
        <Region>
            <BoxMin x="148" y="166" z="0"></BoxMin>
            <BoxMax x="161" y="179" z="1"></BoxMax>
            <Gap>0</Gap>
            <Width>5</Width>
            <Types>CellB</Types>
        </Region>
        <Region>
            <BoxMin x="163" y="169" z="0"></BoxMin>
            <BoxMax x="176" y="182" z="1"></BoxMax>
            <Gap>0</Gap>
            <Width>5</Width>
            <Types>CellC</Types>
        </Region>
    </Steppable>
    <Steppable Type="DiffusionSolverFE">
        <DiffusionField Name="Oxygen">
            <DiffusionData>
                <FieldName>Oxygen</FieldName>
                <GlobalDiffusionConstant>0.9</GlobalDiffusionConstant>
                <GlobalDecayConstant>1e-05</GlobalDecayConstant>
                <InitialConcentrationExpression>x/100</InitialConcentrationExpression>
            </DiffusionData>
        </DiffusionField>
        <DiffusionField Name="Substrate">
            <DiffusionData>
                <FieldName>Substrate</FieldName>
                <GlobalDiffusionConstant>0.9</GlobalDiffusionConstant>
                <GlobalDecayConstant>1e-05</GlobalDecayConstant>
                <InitialConcentrationExpression>0.0</InitialConcentrationExpression>
            </DiffusionData>
        </DiffusionField>
    </Steppable>
    <Plugin Name="Chemotaxis">
        <ChemicalField Name="Oxygen">
            <ChemotaxisByType Type="Cell" Lambda="1000.0"></ChemotaxisByType>
        </ChemicalField>
        <ChemicalField Name="Substrate">
            <ChemotaxisByType Type="CellA" Lambda="800.0"></ChemotaxisByType>
        </ChemicalField>
    </Plugin>
</CompuCell3D>
